PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  expName = ratings
  keyboardBackend = ioHub
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Routines
  Routine intro
    TextComponent intro_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Please look at the following images
        and rate them according to
        how you feel about them.

        [Click anywhere to continue...]
    MouseComponent intro_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet


        # Setup the LSL stream
        info = StreamInfo(name='PsychoPy', type='Markers', channel_count=1,
                          channel_format='string', source_id='PsychopyMarkersID321654')

        # Initialize the LSL stream.
        outlet = StreamOutlet(info)
      Begin Routine:
        outlet.push_sample(["intro"])
  Routine pre
    TextComponent pre_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Get ready...
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  Routine fix
    PolygonComponent fixation_cross
      fillColor = $[1,1,1]
      shape = cross
      size = (0.05, 0.08)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine blank
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine image
    ImageComponent stim_image
      image [set every repeat] = $f"./img/{img_name}"
      size = (1, 1.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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    CodeComponent stim_code
      Code Type = Py
      Begin Routine:
        outlet.push_sample([img_name])
  Routine end
    TextComponent end_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        """
        Thanks for your participation!
        """
  Routine rating
    ImageComponent valence
      image = img/SAM-V-9.png
      pos = (0, 0.5)
      size = (1.5, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    ImageComponent arousal1
      image = img/SAM-A-9.png
      pos = (0, -0.4)
      size = (1.5, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    SliderComponent val_slider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, 0.2)
      size = (1.28, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      styles = rating
      ticks = (-4, -3, -2, -1, 0, 1, 2, 3, 4)
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    SliderComponent ar_slider
      forceEndRoutine = False
      granularity = 0
      letterHeight = 0.05
      pos = (0, -0.7)
      size = (1.28, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      styles = rating
      ticks = (-4, -3, -2, -1, 0, 1, 2, 3, 4)
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Flow
  Routine intro
  Routine pre
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = lists/img2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'img_name': 'img_0_0.jpg', 'condition': 'img'},
      {'img_name': 'img_0_1.jpg', 'condition': 'img'},
      {'img_name': 'img_0_2.jpg', 'condition': 'img'},
      {'img_name': 'img_0_3.png', 'condition': 'img'},
      {'img_name': 'img_0_4.jpg', 'condition': 'img'},
      {'img_name': 'img_0_5.jpg', 'condition': 'img'},
      {'img_name': 'img_0_6.jpg', 'condition': 'img'},
      {'img_name': 'img_0_7.jpg', 'condition': 'img'},
      {'img_name': 'img_1_0.jpg', 'condition': 'img'},
      {'img_name': 'img_1_1.jpg', 'condition': 'img'},
      {'img_name': 'img_1_2.jpg', 'condition': 'img'},
      {'img_name': 'img_1_3.jpg', 'condition': 'img'},
      {'img_name': 'img_1_4.jpg', 'condition': 'img'},
      {'img_name': 'img_1_5.jpg', 'condition': 'img'},
      {'img_name': 'img_1_6.jpg', 'condition': 'img'},
      {'img_name': 'img_1_7.jpg', 'condition': 'img'},
      {'img_name': 'img_2_0.jpg', 'condition': 'img'},
      {'img_name': 'img_2_1.jpg', 'condition': 'img'},
      {'img_name': 'img_2_2.jpg', 'condition': 'img'},
      {'img_name': 'img_2_3.jpg', 'condition': 'img'},
      {'img_name': 'img_2_4.jpg', 'condition': 'img'},
      {'img_name': 'img_2_5.jpg', 'condition': 'img'},
      {'img_name': 'img_2_6.jpg', 'condition': 'img'},
      {'img_name': 'img_2_7.jpg', 'condition': 'img'},
      {'img_name': 'img_3_0.jpg', 'condition': 'img'},
      {'img_name': 'img_3_1.jpg', 'condition': 'img'},
      {'img_name': 'img_3_2.jpg', 'condition': 'img'},
      {'img_name': 'img_3_3.jpg', 'condition': 'img'},
      {'img_name': 'img_3_4.jpg', 'condition': 'img'},
      {'img_name': 'img_3_5.jpg', 'condition': 'img'},
      {'img_name': 'img_3_6.jpg', 'condition': 'img'}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
    Routine fix
    Routine blank
    Routine image
    Routine rating
  LoopTerminator trials
  Routine end
